graphs:

  - id: Broker
    nodes:
    - id: proxy
      module: timeflux.nodes.zmq
      class: Broker
    rate: 1

  - id: Publisher
    nodes:
    # - id: node_1
      # module: timeflux.nodes.sequence
      # class: Sequence
    - id: node_1
      module: timeflux.nodes.random
      class: Random
      params:
        columns: 5
        rows_min: 10
        rows_max: 10
        value_min: 0
        value_max: 5
        seed: 1
    - id: node_2
      module: timeflux.nodes.zmq
      class: Pub
      params:
        topic: 'test'
    edges:
      - source: node_1
        target: node_2
    rate: 100

  - id: Subscriber
    nodes:
    - id: node_1
      module: timeflux.nodes.zmq
      class: Sub
      params:
        topics: ['test']
    - id: node_2
      module: timeflux.nodes.debug
      class: Display
    edges:
      - source: node_1:test
        target: node_2
    rate: 100




